PsychoPy2experiment version="2022.2.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=17CBD1FA
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['expt_3/resources/stimuli_practice_decision/01_rabbit.jpg', 'expt_3/resources/stimuli_practice_decision/02_canary.jpg', 'expt_3/resources/stimuli_practice_decision/03_squirrel.jpg', 'expt_3/resources/stimuli_practice_decision/04_beetle.jpg', 'expt_3/resources/stimuli_practice_decision/05_glasses.jpg', 'expt_3/resources/stimuli_practice_decision/06_pullover.jpg', 'expt_3/resources/stimuli_practice_decision/07_sock.jpg', 'expt_3/resources/stimuli_practice_decision/08_handmixer.jpg', 'expt_3/resources/stimuli_practice_decision/stimuli_info_tab.txt', 'expt_3/resources/sequences_IDs/B/01_redfox.jpg', 'expt_3/resources/sequences_IDs/B/02_dolphin.jpg', 'expt_3/resources/sequences_IDs/B/03_giraffe.jpg', 'expt_3/resources/sequences_IDs/B/04_holdfast.jpg', 'expt_3/resources/sequences_IDs/B/05_parrot.jpg', 'expt_3/resources/sequences_IDs/B/06_gloves.jpg', 'expt_3/resources/sequences_IDs/B/07_sport_tshirt.jpg', 'expt_3/resources/sequences_IDs/B/08_slipper.jpg', 'expt_3/resources/sequences_IDs/B/09_phone.jpg', 'expt_3/resources/sequences_IDs/B/10_radio.jpg', 'expt_3/resources/sequences_IDs/B/stimuli_info_tab.txt', 'expt_3/resources/sequences_IDs/A/01_wolf.jpg', 'expt_3/resources/sequences_IDs/A/02_seaturtle.jpg', 'expt_3/resources/sequences_IDs/A/03_camel.jpg', 'expt_3/resources/sequences_IDs/A/04_clownfish.jpg', 'expt_3/resources/sequences_IDs/A/05_peacock.jpg', 'expt_3/resources/sequences_IDs/A/06_scarf.jpg', 'expt_3/resources/sequences_IDs/A/07_dress.jpg', 'expt_3/resources/sequences_IDs/A/08_hat.jpg', 'expt_3/resources/sequences_IDs/A/09_calculator.jpg', 'expt_3/resources/sequences_IDs/A/10_satellite_dish.jpg', 'expt_3/resources/sequences_IDs/A/stimuli_info_tab.txt', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_1.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_2.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_3.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_4.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_5.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_6.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_7.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_8.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_9.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_10.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_11.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_12.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_13.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_14.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_15.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_16.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_17.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_18.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_19.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_20.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_21.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_22.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_23.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_24.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_25.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_26.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_27.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_28.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_29.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_30.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_31.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_32.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_33.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_34.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_35.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_36.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_37.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_38.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_39.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_40.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_41.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_42.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_43.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_44.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_45.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_46.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_47.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_48.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_49.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_50.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_51.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_52.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_53.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_54.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_55.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_56.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_57.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_58.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_59.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_60.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_61.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_62.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_63.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_64.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_65.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_66.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_67.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_68.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_69.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_70.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_71.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_72.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_73.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_74.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_75.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_76.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_77.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_78.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_79.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_80.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_81.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_82.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_83.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_84.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_85.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_86.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_87.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_88.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_89.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_90.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_91.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_92.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_93.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_94.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_95.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_96.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_97.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_98.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_99.xlsx', 'expt_3/resources/sequences/retriever_switch_conditions_expt_3_100.xlsx', 'expt_3/resources/instructions/Slide1.jpg', 'expt_3/resources/instructions/Slide2.jpg', 'expt_3/resources/instructions/Slide3.jpg', 'expt_3/resources/instructions/Slide4.jpeg', 'expt_3/resources/instructions/Slide4.jpg', 'expt_3/resources/instructions/Slide5.jpg', 'expt_3/resources/instructions/Slide6.jpg', 'expt_3/resources/instructions/Slide7.jpg', 'expt_3/resources/instructions/Slide8.jpg', 'expt_3/resources/instructions/Slide9.jpg', 'expt_3/resources/instructions/Slide10.jpg', 'expt_3/resources/instructions/Slide11.jpg', 'expt_3/resources/instructions/Slide12.jpg', 'expt_3/resources/instructions/Slide13.jpg', 'expt_3/resources/instructions/Slide14.jpg', 'expt_3/resources/instructions/Slide15.jpg', 'expt_3/resources/instructions/Slide16.jpg', 'expt_3/resources/instructions/Slide17.jpg', 'expt_3/resources/attentionChecks.xlsx', 'expt_3/resources/conditions_practice.xlsx', 'expt_2/resources/stimuli_practice_decision/01_rabbit.jpg', 'expt_2/resources/stimuli_practice_decision/02_canary.jpg', 'expt_2/resources/stimuli_practice_decision/03_squirrel.jpg', 'expt_2/resources/stimuli_practice_decision/04_beetle.jpg', 'expt_2/resources/stimuli_practice_decision/05_glasses.jpg', 'expt_2/resources/stimuli_practice_decision/06_pullover.jpg', 'expt_2/resources/stimuli_practice_decision/07_sock.jpg', 'expt_2/resources/stimuli_practice_decision/08_handmixer.jpg', 'expt_2/resources/stimuli_practice_decision/stimuli_info_tab.txt', 'expt_2/resources/sequences_IDs/B/01_redfox.jpg', 'expt_2/resources/sequences_IDs/B/02_dolphin.jpg', 'expt_2/resources/sequences_IDs/B/03_giraffe.jpg', 'expt_2/resources/sequences_IDs/B/04_holdfast.jpg', 'expt_2/resources/sequences_IDs/B/05_parrot.jpg', 'expt_2/resources/sequences_IDs/B/06_gloves.jpg', 'expt_2/resources/sequences_IDs/B/07_sport_tshirt.jpg', 'expt_2/resources/sequences_IDs/B/08_slipper.jpg', 'expt_2/resources/sequences_IDs/B/09_phone.jpg', 'expt_2/resources/sequences_IDs/B/10_radio.jpg', 'expt_2/resources/sequences_IDs/B/stimuli_info_tab.txt', 'expt_2/resources/sequences_IDs/A/01_wolf.jpg', 'expt_2/resources/sequences_IDs/A/02_seaturtle.jpg', 'expt_2/resources/sequences_IDs/A/03_camel.jpg', 'expt_2/resources/sequences_IDs/A/04_clownfish.jpg', 'expt_2/resources/sequences_IDs/A/05_peacock.jpg', 'expt_2/resources/sequences_IDs/A/06_scarf.jpg', 'expt_2/resources/sequences_IDs/A/07_dress.jpg', 'expt_2/resources/sequences_IDs/A/08_hat.jpg', 'expt_2/resources/sequences_IDs/A/09_calculator.jpg', 'expt_2/resources/sequences_IDs/A/10_satellite_dish.jpg', 'expt_2/resources/sequences_IDs/A/stimuli_info_tab.txt', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_1.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_2.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_3.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_4.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_5.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_6.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_7.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_8.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_9.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_10.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_11.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_12.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_13.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_14.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_15.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_16.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_17.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_18.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_19.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_20.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_21.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_22.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_23.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_24.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_25.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_26.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_27.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_28.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_29.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_30.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_31.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_32.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_33.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_34.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_35.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_36.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_37.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_38.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_39.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_40.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_41.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_42.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_43.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_44.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_45.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_46.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_47.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_48.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_49.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_50.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_51.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_52.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_53.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_54.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_55.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_56.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_57.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_58.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_59.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_60.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_61.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_62.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_63.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_64.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_65.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_66.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_67.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_68.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_69.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_70.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_71.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_72.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_73.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_74.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_75.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_76.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_77.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_78.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_79.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_80.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_81.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_82.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_83.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_84.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_85.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_86.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_87.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_88.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_89.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_90.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_91.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_92.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_93.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_94.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_95.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_96.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_97.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_98.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_99.xlsx', 'expt_2/resources/sequences/retriever_switch_conditions_expt_2_100.xlsx', 'expt_2/resources/instructions/Slide1.jpg', 'expt_2/resources/instructions/Slide2.jpg', 'expt_2/resources/instructions/Slide3.jpg', 'expt_2/resources/instructions/Slide4.jpg', 'expt_2/resources/instructions/Slide5.jpg', 'expt_2/resources/instructions/Slide6.jpg', 'expt_2/resources/instructions/Slide7.jpg', 'expt_2/resources/instructions/Slide8.jpg', 'expt_2/resources/instructions/Slide9.jpg', 'expt_2/resources/instructions/Slide10.jpg', 'expt_2/resources/instructions/Slide11.jpg', 'expt_2/resources/instructions/Slide12.jpg', 'expt_2/resources/instructions/Slide13.jpg', 'expt_2/resources/instructions/Slide14.jpg', 'expt_2/resources/instructions/Slide15.jpg', 'expt_2/resources/instructions/Slide16.jpg', 'expt_2/resources/instructions/Slide17.jpg', 'expt_2/resources/instructions/Slide18.jpg', 'expt_2/resources/attentionChecks.xlsx', 'expt_2/resources/conditions_practice.xlsx', 'expt_1/resources/stimuli_practice_decision/01_rabbit.jpg', 'expt_1/resources/stimuli_practice_decision/02_canary.jpg', 'expt_1/resources/stimuli_practice_decision/03_squirrel.jpg', 'expt_1/resources/stimuli_practice_decision/04_beetle.jpg', 'expt_1/res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structions/Slide17.jpg', 'expt_1/resources/instructions/Slide18.jpg', 'expt_1/resources/instructions/Slide19.jpg', 'expt_1/resources/attentionChecks.xlsx', 'expt_1/resources/conditions_practice.xlsx']
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[1.000,1.000,1.000]
  expName = Retriever
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    ImageComponent imageP1
      image [set every repeat] = $P1Loc
      pos = (-250, 0)
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = pix
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    ImageComponent imageP2
      image [set every repeat] = $P2Loc
      pos = (250, 0)
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $CorrectAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      store = first key
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    CodeComponent Feedb
      Code Type = Both
      Begin Experiment:
        # Message that will be updated with specific feedback
        msg = 'Feedback msg after trial'

        # Counter for the trials
        ntrial = 0
        trialReal = []

        # Coding the feedback message - add to output file
        acc_real = []
        acc_feedback = []

        # Counter for hits per block for feedback and real accuracy
        hits_per_block = 0
        hits_per_block_real = 0

        # Counter for the bonus
        bonus_accuracies = []
      Begin JS Experiment:
        msg = "Feedback msg after trial";
        ntrial = 0;
        trialReal = [];
        acc_real = [];
        acc_feedback = [];
        hits_per_block = 0;
        hits_per_block_real = 0;
        bonus_accuracies = [];
      Begin JS Routine:
        ntrial += 1;
        trialReal = ntrial;
        psychoJS.experiment.addData("trialNumber", trialReal);
        crossDisappear = 1;
      Begin Routine:
        # Counter for which trial we are in right now
        ntrial += 1
        trialReal = ntrial
        thisExp.addData('trialNumber', trialReal)
        crossDisappear = 1
        #mainStart = core.monotonicClock.getTime()
      Each Frame:
        if key_resp.keys == 'left' or key_resp.keys == 'right':
            crossDisappear = 0
      Each JS Frame:
        if (((key_resp.keys === "left") || (key_resp.keys === "right"))) {
            crossDisappear = 0;
        }
      End JS Routine:
        if ((key_resp.keys === "left")) {
            valueDiff = (ValueP1 - ValueP2);
            psychoJS.experiment.addData("item_chosen_name", P1name);
            psychoJS.experiment.addData("item_chosen_value", ValueP1);
            psychoJS.experiment.addData("item_chosen_ID", P1id);
        } else {
            if ((key_resp.keys === "right")) {
                valueDiff = (ValueP2 - ValueP1);
                psychoJS.experiment.addData("item_chosen_name", P2name);
                psychoJS.experiment.addData("item_chosen_value", ValueP2);
                psychoJS.experiment.addData("item_chosen_ID", P2id);
            } else {
                if ((key_resp.keys === undefined)) {
                    valueDiff = undefined;
                    psychoJS.experiment.addData("item_chosen_name", undefined);
                    psychoJS.experiment.addData("item_chosen_value", undefined);
                    psychoJS.experiment.addData("item_chosen_ID", undefined);
                }
            }
        }
        value_dist = (ValueP1 - ValueP2);
        value_dist_abs = Math.abs(value_dist);
        if ((key_resp.keys === undefined)) {
            msg = "TRY TO RESPOND FASTER";
            acc_feedback = 2;
            acc_real = 2;
            durationBlank = 0.5;
        } else {
            if ((Feedback_On === 0)) {
                msg = "";
                durationBlank = 0.0;
                acc_feedback = 3;
            } else {
                if ((Feedback_On === 1)) {
                    durationBlank = 0.5;
                    if ((InverseFb === 1)) {
                        if ((valueDiff > 0)) {
                            msg = "Incorrect";
                            acc_feedback = 0;
                        } else {
                            if ((valueDiff < 0)) {
                                msg = "Correct";
                                acc_feedback = 1;
                            }
                        }
                    } else {
                        if ((InverseFb === 0)) {
                            if ((valueDiff > 0)) {
                                msg = "Correct";
                                acc_feedback = 1;
                            } else {
                                if ((valueDiff < 0)) {
                                    msg = "Incorrect";
                                    acc_feedback = 0;
                                }
                            }
                        }
                    }
                }
            }
        }
        if ((valueDiff === undefined)) {
            acc_real = 2;
        } else {
            if ((((valueDiff > 0) && (InverseFb === 0)) || ((valueDiff < 0) && (InverseFb === 1)))) {
                acc_real = 1;
                hits_per_block_real = (hits_per_block_real + 1);
            } else {
                if ((((valueDiff > 0) && (InverseFb === 1)) || ((valueDiff < 0) && (InverseFb === 0)))) {
                    acc_real = 0;
                }
            }
        }
        psychoJS.experiment.addData("diff_chosen_minus_reject", valueDiff);
        psychoJS.experiment.addData("acc_real", acc_real);
        psychoJS.experiment.addData("acc_feedback", acc_feedback);
        psychoJS.experiment.addData("expt_n", expt_n);

        bonus_accuracies.push(acc_real);
      End Routine:
        # Catch responses
        if key_resp.keys == 'left':
            valueDiff = ValueP1 - ValueP2
            thisExp.addData('item_chosen_name', P1name)
            thisExp.addData('item_chosen_value', ValueP1)
            thisExp.addData('item_chosen_ID', P1id)
        elif key_resp.keys == 'right':
            valueDiff = ValueP2 - ValueP1
            thisExp.addData('item_chosen_name', P2name)
            thisExp.addData('item_chosen_value', ValueP2)
            thisExp.addData('item_chosen_ID', P2id)
        elif key_resp.keys == None:
            valueDiff = None
            thisExp.addData('item_chosen_name', None)
            thisExp.addData('item_chosen_value', None)
            thisExp.addData('item_chosen_ID', None)

        # Calculating if items are neighbors or not

        value_dist = ValueP1 - ValueP2
        value_dist_abs = abs(value_dist)

        # Preparing feedback messages

        if key_resp.keys == None:
            msg = 'TRY TO RESPOND FASTER'
            acc_feedback = 2
            acc_real = 2
            durationBlank = 0.5
        elif Feedback_On == 0:
            msg = ''
            durationBlank = 0.0
            acc_feedback = 3
        elif Feedback_On == 1:
            durationBlank = 0.5
            if InverseFb == 1:
                if valueDiff > 0:
                    msg = 'Incorrect'
                    acc_feedback = 0
                elif valueDiff < 0:
                    msg = 'Correct'
                    acc_feedback = 1
            elif InverseFb == 0:
                if valueDiff > 0:
                    msg = 'Correct'
                    acc_feedback = 1
                elif valueDiff < 0:
                    msg = 'Incorrect'
                    acc_feedback = 0

        # Loop for saving the real feedback and hits
        if valueDiff is None:
            acc_real = 2
        elif (valueDiff > 0 and InverseFb == 0) or (valueDiff < 0 and InverseFb == 1):
            acc_real = 1
            hits_per_block_real = hits_per_block_real + 1
        elif (valueDiff > 0 and InverseFb == 1) or (valueDiff < 0 and InverseFb == 0):
            acc_real = 0

        # Add data to output file
        thisExp.addData('diff_chosen_minus_reject', valueDiff)
        thisExp.addData('acc_real', acc_real)
        thisExp.addData('acc_feedback', acc_feedback)
        thisExp.addData('expt_n', expt_n)

        # Add acc from this trial to an array for later
        bonus_accuracies.append(acc_real)
    PolygonComponent cross_objects
      fillColor = $[-1.000,-1.000,-1.000]
      opacity [set every frame] = crossDisappear
      saveStartStop = False
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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  Routine fixation_2
    PolygonComponent fixcross
      fillColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (20, 20)
      startVal [frame N] = 0
      stopVal [duration (s)] = 0.5
      units = pix
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    CodeComponent fixcross_prac_duration
      Code Type = Auto->JS
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      Begin Routine:
        # Jitter the timing of fixation cross 0.5 to 1.5 seconds

        #jitter = 30 + randint(0, 60)
  Routine feedback
    TextComponent Feedback
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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    CodeComponent OnsetFeedbMain
      Code Type = Both
      Begin JS Routine:
        // Store time when the feedback routine is starting
        startFeedbMain = globalClock.getTime();
      End JS Routine:
        // Add onset of feedback message to output file
        psychoJS.experiment.addData('feedb_onset', startFeedbMain + Feedback.tStart);
    TextComponent blankScreen2
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = $durationBlank
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      text:
        Any text

        including line breaks
  Routine BlockFeedback
    CodeComponent fbBlock
      Code Type = Both
      Begin Experiment:
        # Message will be updated every block
        msgBlock = 'fb after Block'
      Begin JS Experiment:
        msgBlock = "fb after Block";
      Begin JS Routine:
        // Calculate accuracy in the block and in attention checks
        previous_block_acc = (Number.parseFloat(hits_per_block_real) / (ntrial));
        check_AC_acc = (hits_in_attention2 / 8);



        // Present messages depending on percentage of correct answers
        if ((previous_block_acc >= 0.8)) {
            msgBlock = "Amazing, your accuracy in the block was really high!\nRemember, the number of correct trials will determine the chance to get the bonus payment. [Press space bar to continue.]";
        } else {
            if (((previous_block_acc < 0.8) && (previous_block_acc >= 0.6))) {
                msgBlock = "Your accuracy in the block was great! You are doing an excellent job!\nRemember, the number of correct trials will determine the chance to get the bonus payment. [Press space bar to continue.]";
            } else {
                if (((previous_block_acc < 0.6) && (previous_block_acc >= 0.5))) {
                    msgBlock = "Your accuracy in the block was good. However, there is still room for improvement!\nRemember, the number of correct trials will determine the chance to get the bonus payment. [Press space bar to continue.]";
                } else {
                    if ((previous_block_acc < 0.5)) {
                        msgBlock = "Your accuracy in the block was a bit low. \nDon't give up! You will surely improve it.\nRemember, the number of correct trials will determine the chance to get the bonus payment. [Press space bar to continue.]";
                    }
                }
            }
        }
      Begin Routine:
        # Calculating accuracy in the block
        previous_block_acc = float(hits_per_block_real)/ntrial


        # Present message depending on percentage of correct answers
        if previous_block_acc >= 0.80:
            msgBlock = 'Amazing, your accuracy in the block was really high!\nRemember, the number of correct trials will determine the chance to get the bonus payment.\nPress SPACE to continue.'
        elif previous_block_acc < 0.80 and previous_block_acc >= 0.60:
            msgBlock = 'Your accuracy in the block was great! You are doing an excellent job!\nRemember, the number of correct trials will determine the chance to get the bonus payment.\nPress SPACE to continue.'
        elif previous_block_acc < 0.60 and previous_block_acc >= 0.50:
            msgBlock = 'Your accuracy in the block was good. However, there is still room for improvement!\nRemember, the number of correct trials will determine the chance to get the bonus payment.\nPress SPACE to continue.'
        elif previous_block_acc <= 0.50:
            msgBlock = 'Your accuracy in the block was a bit low. \nDon\'t give up! You will surely improve it.\nRemember, the number of correct trials will determine the chance to get the bonus payment.\nPress SPACE to continue.'
    TextComponent feedbBlocks
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgBlock
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    KeyboardComponent keynextBlock
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LoopControl_2
    CodeComponent LoopContr
      Code Type = Auto->JS
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      Begin Experiment:
        # Counter for the blocks
        thisBlock = 0
        numberACresults = 0
        # Message shown before each block, to be updated
        msgBlockNumber = 'which block we say we starting'

        main_task_blocks = (("expt_" + str(expt_n) + "/resources/sequences/retriever_switch_conditions_expt_" + str(expt_n) + "_" + str(expInfo["participant"])) + ".xlsx")
      Begin Routine:
        # First time we enter the loop, we are in block 1
        thisBlock +=1

        # A slice between two specific rows - trials for the block
        #myIndices = slice(startItem, endItem+1)
        if expt_n == 1:
            if thisBlock == 1:
                MyIndicesMain = "0:70"
            elif thisBlock == 2:
                MyIndicesMain = "70:140"
            elif thisBlock == 3:
                MyIndicesMain = "140:210"
            elif thisBlock == 4:
                MyIndicesMain = "210:282"
            elif thisBlock == 5:
                MyIndicesMain = "282:354"
            elif thisBlock == 6:
                MyIndicesMain = "354:426"
        elif expt_n == 2:
            if thisBlock == 1:
                MyIndicesMain = "0:54"
            elif thisBlock == 2:
                MyIndicesMain = "54:108"
            elif thisBlock == 3:
                MyIndicesMain = "108:162"
            elif thisBlock == 4:
                MyIndicesMain = "162:234"
            elif thisBlock == 5:
                MyIndicesMain = "234:306"
            elif thisBlock == 6:
                MyIndicesMain = "306:378"
        elif expt_n == 3:
            if thisBlock == 1:
                MyIndicesMain = "0:54"
            elif thisBlock == 2:
                MyIndicesMain = "54:108"
            elif thisBlock == 3:
                MyIndicesMain = "108:162"
            elif thisBlock == 4:
                MyIndicesMain = "162:232"
            elif thisBlock == 5:
                MyIndicesMain = "232:302"
            elif thisBlock == 6:
                MyIndicesMain = "302:372"
        # Update message before every new block
        msgBlockNumber = 'You will start block ' + str(thisBlock) + ' out of 6. \nRemember that both accuracy and speed matter. \n[Press space bar to begin.]'

        # After block 3 we do the attention checks and introduce uro instructions
        if thisBlock == 3:
            uroInstructions = 1
            repsAC = 1
            numberACresults = 1
        else:
            uroInstructions = 0
            repsAC = 0
            numberACresults = 0
    TextComponent beginBlock
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgBlockNumber
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    KeyboardComponent key_respStart
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    ImageComponent instr1
      image [set every repeat] = $current_img
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent keyNext
      allowedKeys = 'left', 'right', 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeJScomponent
      Code Type = Auto->JS
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    CodeComponent imagesSlides
      Code Type = Auto->JS
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      Before Experiment:
        #Assign participant to expt 1,2 or 3
        import random
        expt_n = random.choice((1,2,3))

        if expt_n == 1:
            n_instructions1 = 14
            n_instructions2 = 19
        elif expt_n ==2:
            n_instructions1 = 13
            n_instructions2 = 18
        elif expt_n ==3:
            n_instructions1 = 13
            n_instructions2 = 17
      Begin Experiment:
        img_no = 1

        current_img = 'expt_' + str(expt_n) + '/resources/instructions/Slide' + str(img_no) + '.jpg'
      Begin Routine:
        current_img = 'expt_' + str(expt_n) + '/resources/instructions/Slide' + str(img_no) + '.jpg'
      End Routine:
        # if the participant pressed the left key, decrease the image
        # number by one (e. g. going from "image 2" to "image 1"),
        # and if they pressed the right key, increase the image number
        # by one ("image 2" -> "image 3")
        if (img_no > 1) and ((keyNext.keys == str('left')) or (keyNext.keys == 'left')):
            img_no -= 1
        elif (img_no < n_instructions1) and ((keyNext.keys == str('right')) or (keyNext.keys == 'right')):
            img_no += 1
        elif (img_no == n_instructions1) and ((keyNext.keys == 'space') or (keyNext.keys == str('space'))):
            instructionsLoop.finished = True
        current_img = 'expt_' + str(expt_n) + '/resources/instructions/Slide' + str(img_no) + '.jpg'
  Routine practice
    ImageComponent practiceP1
      image [set every repeat] = $LocItem1
      pos = (-250, 0)
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    ImageComponent practiceP2
      image [set every repeat] = $LocItem2
      pos = (250, 0)
      saveStartStop = False
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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    KeyboardComponent practiceKey
      allowedKeys = 'left','right'
      correctAns = $CorrKey
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = first key
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    CodeComponent practiceFeedb
      Code Type = Both
      Begin Experiment:
        # Feedback message
        msgPractice = 'Feedback msg after practice trial'

        # Acc_practice to save code for accuracy
        acc_practice = []
        prac_trial = 0
        tprac = []
        durationBlank = 0.0
      Begin JS Experiment:
        msgPractice = "Feedback msg after practice trial";
        acc_practice = [];
        prac_trial = 0;
        tprac = [];
        durationBlank = 0.0;
      Begin JS Routine:
        prac_trial += 1;
        tprac = prac_trial;
        psychoJS.experiment.addData("tprac", tprac);
        crossDisappear = 1;
      Begin Routine:
        # Update trial number and add it to outputfile
        prac_trial += 1
        tprac = prac_trial
        thisExp.addData('tprac', tprac)
        crossDisappear = 1
      Each Frame:
        if (practiceKey.keys == 'left') or (practiceKey.keys == 'right'):
            crossDisappear = 0
      Each JS Frame:
        if (((practiceKey.keys === "left") || (practiceKey.keys === "right"))) {
            crossDisappear = 0;
        }
      End JS Routine:
        if ((practiceKey.keys === "left")) {
            valueDiff = (P1 - P2);
        }
        if ((practiceKey.keys === "right")) {
            valueDiff = (P2 - P1);
        }
        if ((practiceKey.keys === undefined)) {
            valueDiff = undefined;
        }
        value_dist = (P1 - P2);
        value_dist_abs = Math.abs(value_dist);
        if ((practiceKey.keys === undefined)) {
            msgPractice = "TRY TO RESPOND FASTER";
        } else {
            if ((value_dist_abs > 1)) {
                msgPractice = "";
                durationBlank = 0;
            } else {
                if ((value_dist_abs === 1)) {
                    durationBlank = 0.5;
                    if ((valueDiff > 0)) {
                        msgPractice = "Correct";
                    } else {
                        if ((valueDiff < 0)) {
                            msgPractice = "Incorrect";
                        }
                    }
                }
            }
        }
        if ((valueDiff === undefined)) {
            acc_practice = 2;
        } else {
            if ((valueDiff > 0)) {
                acc_practice = 1;
            } else {
                if ((valueDiff < 0)) {
                    acc_practice = 0;
                }
            }
        }
        psychoJS.experiment.addData("acc_practice", acc_practice);
      End Routine:
        ### Practice feedback
        # Catching response and calculating value; > 0 means correct

        if practiceKey.keys == 'left':
            valueDiff = P1 - P2
        if practiceKey.keys == 'right':
            valueDiff = P2 - P1
        if practiceKey.keys is None:
            valueDiff = None

        # Calculating if items are neighbors or not

        value_dist = P1 - P2
        value_dist_abs = abs(value_dist)

        # Loop for giving accurate feedback after every trial
        # Participant doesn't respond on time
        if practiceKey.keys is None:
            msgPractice = 'TRY TO RESPOND FASTER'
        elif value_dist_abs > 1:
            msgPractice = ''
            durationBlank = 0
        elif value_dist_abs == 1:
            durationBlank = 0.5
            if valueDiff > 0:
                msgPractice = 'Correct'
            elif valueDiff < 0:
                msgPractice = 'Incorrect'

        # Loop for saving feedback and hits
        if valueDiff is None:
            acc_practice = 2
        elif valueDiff > 0:
            acc_practice = 1
        elif valueDiff < 0:
            acc_practice = 0

        thisExp.addData('acc_practice', acc_practice)
    PolygonComponent crossPractice
      fillColor = $[-1,-1,-1]
      opacity [set every frame] = crossDisappear
      saveStartStop = False
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = pix
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  Routine bonus
    CodeComponent bonusCode
      Code Type = Both
      Begin Experiment:
        msgBonus = 'Feedback msg to say if participant gets bonus'
        get_bonus = []
      Begin JS Experiment:
        msgBonus = "Feedback msg to say if participant gets bonus";
        get_bonus = [];
      Begin JS Routine:
        // Select a number of random trials from an array
        function getRandomSubarray(arr, size) {
            var shuffled = arr.slice(0), i = arr.length, temp, index;
            while (i--) {
                index = Math.floor((i + 1) * Math.random());
                temp = shuffled[index];
                shuffled[index] = shuffled[i];
                shuffled[i] = temp;
            }
            return shuffled.slice(0, size);
        }

        // Store 10 random trials in a variable and check their accuracy
        var sampled_accuracies = getRandomSubarray(bonus_accuracies, 10);
        var countBonuses = 0;
        for(var i = 0; i < sampled_accuracies.length; ++i){
            if(sampled_accuracies[i] == 1)
                countBonuses++;
        }

        // Update messages depending on number of accurate responses
        if (countBonuses > 5) {
            msgBonus = "Ten random responses from the main task were selected. \nCONGRATULATIONS! More than half of your responses were correct. \nYou will receive the BONUS! \n[Press space to continue]";
            get_bonus = 1;
            psychoJS.experiment.addData("Bonus", get_bonus);
        } else {
            msgBonus = "Sorry! Unfortunately, at least half of the ten randomly picked responses from the main task were not correct. \nYou cannot not receive the bonus \n[Press space to continue]";
            get_bonus = 0;
            psychoJS.experiment.addData("Bonus", get_bonus);
        }
      Begin Routine:
        # Pick 10 random number from the accuracy counter
        import random as random
        sampled_accuracies = random.sample(bonus_accuracies, 10)

        # Display bonus message
        if sampled_accuracies.count(1) > 5:
            msgBonus = 'CONGRATULATIONS! The randomly picked responses were correct. You will receive the BONUS!\nPress SPACE to continue'
            get_bonus = 1
            thisExp.addData('Bonus', get_bonus)
        else:
            msgBonus = 'Sorry! Unfortunately, the randomly picked responses were not correct. You cannot not receive the bonus\nPress SPACE to continue'
    KeyboardComponent key_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent presentBonus
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $msgBonus
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  Routine PracFeedb_2
    TextComponent practiceFeedback
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msgPractice
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    CodeComponent onsetFeedbackCode
      Code Type = Auto->JS
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    TextComponent screenAfterFB
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $durationBlank
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      text:
        Any text

        including line breaks
  Routine practiceBlocks
    CodeComponent codePracStart
      Code Type = Auto->JS
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      Before Experiment:
        conditions_practice = (("expt_" + str(expt_n) + "/resources/conditions_practice.xlsx"))
      Begin Experiment:
        # Counter for the practice blocks
        practiceBlock = 0

        # Message to be updated before every block
        msgStartPractice = 'message shown before a practice Block'

        # Highest stimulus value

        stim_num_max = 8
      Begin Routine:
        # First time we enter the loop, we are in block 1

        practiceBlock +=1

        # Update message before blocks
        if practiceBlock == 1:
            myIndices = "0:8"
            msgStartPractice = 'Let\'s start practicing this task.\nDon\'t worry about making mistakes, just try to understand the goal for this task.\n[Press space bar to continue]'
        else:
            myIndices = "8:16"
            msgStartPractice = 'This is the second practice block. \nAgain, relax and try to get familiar with the task and the timing, don\'t worry about mistakes.\n[Press space bar to start]'
    KeyboardComponent key_startPrac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent practiceMessage
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgStartPractice
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  Routine finishExperiment
    TextComponent finalText
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! You finished the task. Thank you!
        Press space to exit and please wait until you get redirected back to Prolific.
    KeyboardComponent key_respEnd
      allowedKeys = 'space', 'Escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine attentionCheck
    KeyboardComponent key_respAC
      allowedKeys = 'up','down','left','right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
      storeCorrect = True
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    CodeComponent run_check
      Code Type = Auto->JS
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      Begin Experiment:
        AC_acc = []
        hits_in_attention2 = 0
      End Routine:
        if key_respAC.corr:
            AC_acc = 1
            hits_in_attention2 += 1
        else:
            AC_acc = 0

        thisExp.addData('AC_acc', AC_acc)
    TextComponent Pos1
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc1
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    TextComponent Pos2
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc2
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    TextComponent Pos3
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc3
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    TextComponent Pos4
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc4
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    TextComponent shapeInstructions
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Use arrow keys to pick the number shown in the center
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    TextComponent ac_stim
      color = black
      font = Calibri
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $Stim
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  Routine attentionCheckPrac
    KeyboardComponent key_respAC_prac
      allowedKeys = 'up','down','left','right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
      storeCorrect = True
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    CodeComponent run_check_prac
      Code Type = Auto->JS
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      Begin Experiment:
        # List storing the accuracy as 1 or 0
        AC_acc = []
        hits_in_attention = 0
        abortMsg = ''
      End Routine:
        # Add accuracy to output file
        if key_respAC_prac.corr:
            AC_acc = 1
            hits_in_attention += 1
        else:
            AC_acc = 0

        thisExp.addData('AC_acc', AC_acc)
    TextComponent Pos1_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc1
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    TextComponent Pos2_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc2
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    TextComponent Pos3_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc3
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    TextComponent Pos4_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Loc4
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    TextComponent taskAC_prac
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Use arrow keys to pick the number shown in the center
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    TextComponent ac_stim_prac
      color = black
      font = Calibri
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $Stim
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  Routine ContinueOrEnd
    CodeComponent AccuracyCheck
      Code Type = Auto->JS
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      Begin Experiment:
        blockRepetitions = 0
        numberQuits = 0
      Begin Routine:
        #Calculate accuracy in AC and end experiment if acc belor 50%
        check_AC_acc = float(hits_in_attention)/8.0

        if check_AC_acc < 0.50:
            # Skip whole real task
            blockRepetitions = 0
            repsBonus = 0
            abortMsg = 'Your accuracy in the attention checks is too low. \nYou have reached the end of the experiment. \nPress space to quit the experiment. Thank you!'
            numberQuits = 1
        else:
            # Next line tells how many real blocks
            blockRepetitions = 6
            repsBonus = 1
            abortMsg = 'You passed the attention checks. \nYou are about to start the real task with entirely new images. \nHere, both your accuracy and speed matter for the experiment. \n[ Press space bar to START ]'
            numberQuits = 0
    TextComponent messageChecks
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $abortMsg
    KeyboardComponent key_endFail
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine freeResponse
    TextComponent text
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent typingText
      Code Type = Auto->JS
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      Begin Routine:
        # Code in this part is from https://gitlab.pavlovia.org/demos/textinput/
        text.text = ''
        modify = False
        event.clearEvents('keyboard')
      End Routine:
        thisExp.addData("comments", subjectText.text)
    TextComponent ask_for_feedb
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How did you solve the task? What is cnarcy?  Please write down what you think. [When ready, press Enter to go to our last message]
  Routine rateItems
    ImageComponent item_to_rate
      image [set every repeat] = $Location
      saveStartStop = False
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent keyNext_2
      allowedKeys = '1','2','3','4','5','6','7','8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent ratingInstr
      color = black
      font = Sans Serif
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please order the objects according to their position (1 is the worst and 8 is the best). Type a number for every picture.
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  Routine fixation_main
    PolygonComponent fixcross_2
      fillColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (20, 20)
      startVal [frame N] = 0
      stopVal [time (s)] = 0.5
      units = pix
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Jitter the timing of fixation cross 0.5 to 1.5 seconds

        #jitter = 30 + randint(0, 60)
  Routine instruct_understood
  Routine WelcomeScreen
    TextComponent welcome
      color = black
      font = Calibri
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome to our online experiment!

        Press space to begin reading the instructions.

        You can switch through instruction slides with left and right keys
    KeyboardComponent startInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        images = ['Slide1.jpg', 'Slide2.jpg', 'Slide3.jpg', 'Slide4.jpg', 'Slide5.jpg', 'Slide6.jpg', 'Slide7.jpg', 'Slide8.jpg', 'Slide9.jpg', 'Slide10.jpg', 'Slide11.jpg', 'Slide12.jpg', 'Slide13.jpg']
  Routine disturbance
    TextComponent disturbed
      color = black
      font = Sans Serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Were things around you quiet during the last block?

        Press '1' if you were disturbed and '0' if you were NOT disturbed.

        Please do NOT use the NumPad.
    KeyboardComponent keyDisturbed
      allowedKeys = '1', '0'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine quitExperiment
    CodeComponent quitExpCode
      Code Type = Auto->JS
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      Begin Routine:
        core.quit()
  Routine ContinueOrEnd2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        numberQuits2 = 0
        msgEndExperiment = 'text after attention checks'
      Begin Routine:
        # Force end of loop if subjects fail AC
        check_AC_acc_2 = float(hits_in_attention2)/8.0
        if check_AC_acc_2 < 0.50:
            msgEndExperiment = 'Your accuracy in the attention checks is too low. \nYou have reached the end of the experiment. \nPress the space to quit the experiment. Thank you!'
            numberQuits2 = 1
        else:
            msgEndExperiment = 'You passed the attention checks. \nPress space to see your feedback for the block.'
            numberQuits2 = 0
    TextComponent textEndExperiment
      color = black
      font = Sans Serif
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgEndExperiment
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    KeyboardComponent pressToEndExp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine quitExperiment2
    CodeComponent quitExpCode_2
      Code Type = Auto->JS
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      Begin Routine:
        core.quit()
  Routine uro_instructions
    ImageComponent instr1_2
      image [set every repeat] = $current_uro_img
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent keyNext_3
      allowedKeys = 'left', 'right', 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeJScomponent_2
      Code Type = Auto->JS
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    CodeComponent imagesSlides_2
      Code Type = Auto->JS
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      Begin Experiment:
        uro_img_no = n_instructions1+1

        current_uro_img = 'expt_'+str(expt_n)+'/resources/instructions/Slide' + str(uro_img_no) + '.jpg'
      Begin Routine:
        current_uro_img = 'expt_'+str(expt_n)+'/resources/instructions/Slide' + str(uro_img_no) + '.jpg'
      End Routine:
        # if the participant pressed the left key, decrease the image
        # number by one (e. g. going from "image 2" to "image 1"),
        # and if they pressed the right key, increase the image number
        # by one ("image 2" -> "image 3")
        if (uro_img_no > n_instructions1 + 1) and ((keyNext_3.keys == str('left')) or (keyNext_3.keys == 'left')):
            uro_img_no -= 1
        elif (uro_img_no < n_instructions2) and ((keyNext_3.keys == str('right')) or (keyNext_3.keys == 'right')):
            uro_img_no += 1
        elif (uro_img_no == n_instructions2) and ((keyNext_3.keys == 'space') or (keyNext_3.keys == str('space'))):
            uro_instructionsLoop.finished = True
        current_uro_img = 'expt_'+str(expt_n)+'/resources/instructions/Slide' + str(uro_img_no) + '.jpg'
  Routine uro_instructions_2
Flow
  LoopInitiator instructionsLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine instructions
  LoopTerminator instructionsLoop
  LoopInitiator repPractice loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine practiceBlocks
    LoopInitiator practiceTrials loopType="TrialHandler"
      Selected rows = $myIndices
      conditionsFile = $conditions_practice
      loopType = sequential
      nReps = 1
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      Routine fixation_2
      Routine practice
      Routine PracFeedb_2
    LoopTerminator practiceTrials
    LoopInitiator Attentions loopType="TrialHandler"
      Selected rows = 0:4
      conditionsFile = expt_1/resources/attentionChecks.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'Stim': 1, 'Loc1': 'one ↑', 'Loc2': 'three →', 'Loc3': 'four ↓', 'Loc4': '← two', 'CorrAns': 'up'},
        {'Stim': 3, 'Loc1': 'two ↑', 'Loc2': 'one →', 'Loc3': 'three ↓', 'Loc4': '← four', 'CorrAns': 'down'},
        {'Stim': 2, 'Loc1': 'three ↑', 'Loc2': 'four →', 'Loc3': 'one ↓', 'Loc4': '← two', 'CorrAns': 'left'},
        {'Stim': 4, 'Loc1': 'two↑', 'Loc2': 'three →', 'Loc3': 'four ↓', 'Loc4': '← one', 'CorrAns': 'down'},
        {'Stim': 1, 'Loc1': 'four ↑', 'Loc2': 'one →', 'Loc3': 'two ↓', 'Loc4': '← three', 'CorrAns': 'right'},
        {'Stim': 3, 'Loc1': 'two ↑', 'Loc2': 'three →', 'Loc3': 'one ↓', 'Loc4': '← four', 'CorrAns': 'right'},
        {'Stim': 2, 'Loc1': 'two ↑', 'Loc2': 'four →', 'Loc3': 'three ↓', 'Loc4': '← one', 'CorrAns': 'up'},
        {'Stim': 4, 'Loc1': 'one ↑', 'Loc2': 'four →', 'Loc3': 'two ↓', 'Loc4': '← three', 'CorrAns': 'right'}]
      Routine attentionCheckPrac
    LoopTerminator Attentions
    Routine disturbance
  LoopTerminator repPractice
  Routine ContinueOrEnd
  LoopInitiator quitExpLoop loopType="TrialHandler"
    loopType = random
    nReps = numberQuits
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    Routine quitExperiment
  LoopTerminator quitExpLoop
  LoopInitiator repBlocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = blockRepetitions
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    Routine LoopControl_2
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $MyIndicesMain
      conditionsFile = $main_task_blocks
      loopType = sequential
      nReps = 1
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      Routine fixation_main
      Routine trial
      Routine feedback
    LoopTerminator trials
    LoopInitiator trials_AC loopType="TrialHandler"
      conditionsFile = expt_1/resources/attentionChecks.xlsx
      loopType = fullRandom
      nReps = repsAC
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      conditions:
        [{'Stim': 1, 'Loc1': 'one ↑', 'Loc2': 'three →', 'Loc3': 'four ↓', 'Loc4': '← two', 'CorrAns': 'up'},
        {'Stim': 3, 'Loc1': 'two ↑', 'Loc2': 'one →', 'Loc3': 'three ↓', 'Loc4': '← four', 'CorrAns': 'down'},
        {'Stim': 2, 'Loc1': 'three ↑', 'Loc2': 'four →', 'Loc3': 'one ↓', 'Loc4': '← two', 'CorrAns': 'left'},
        {'Stim': 4, 'Loc1': 'two↑', 'Loc2': 'three →', 'Loc3': 'four ↓', 'Loc4': '← one', 'CorrAns': 'down'},
        {'Stim': 1, 'Loc1': 'four ↑', 'Loc2': 'one →', 'Loc3': 'two ↓', 'Loc4': '← three', 'CorrAns': 'right'},
        {'Stim': 3, 'Loc1': 'two ↑', 'Loc2': 'three →', 'Loc3': 'one ↓', 'Loc4': '← four', 'CorrAns': 'right'},
        {'Stim': 2, 'Loc1': 'two ↑', 'Loc2': 'four →', 'Loc3': 'three ↓', 'Loc4': '← one', 'CorrAns': 'up'},
        {'Stim': 4, 'Loc1': 'one ↑', 'Loc2': 'four →', 'Loc3': 'two ↓', 'Loc4': '← three', 'CorrAns': 'right'}]
      Routine attentionCheck
    LoopTerminator trials_AC
    LoopInitiator presentACresults loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = numberACresults
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      Routine ContinueOrEnd2
    LoopTerminator presentACresults
    LoopInitiator quitExpLoop2 loopType="TrialHandler"
      loopType = random
      nReps = numberQuits2
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      Routine quitExperiment2
    LoopTerminator quitExpLoop2
    Routine BlockFeedback
    Routine disturbance
    LoopInitiator uro_instr_reps loopType="TrialHandler"
      loopType = fullRandom
      nReps = uroInstructions
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      LoopInitiator uro_instructionsLoop loopType="TrialHandler"
        loopType = sequential
        nReps = 100
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        Routine uro_instructions
      LoopTerminator uro_instructionsLoop
    LoopTerminator uro_instr_reps
  LoopTerminator repBlocks
  LoopInitiator BonusLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = repsBonus
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    Routine bonus
  LoopTerminator BonusLoop
  Routine finishExperiment
